PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Testing
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Routines
  Routine trial
    ImageComponent imagetest
      image [set every repeat] = $Images
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    KeyboardComponent key_resp
      allowedKeys = 'a','l'
      correctAns = $CorrResp
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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  Routine instructions
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Hello
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:\Users\19728\OneDrive\Documents\ImageTesting.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Images': 'PhotoStimuli/boat.jpg', 'CorrResp': 'l'},
      {'Images': 'PhotoStimuli/cow.jpg', 'CorrResp': 'a'},
      {'Images': 'PhotoStimuli/dog.jpg', 'CorrResp': 'a'},
      {'Images': 'PhotoStimuli/helicopter.jpg', 'CorrResp': 'l'},
      {'Images': 'PhotoStimuli/carone.jpg', 'CorrResp': 'l'},
      {'Images': 'PhotoStimuli/cartwo.jpg', 'CorrResp': 'l'}]
    Routine trial
  LoopTerminator trials
